PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = working memory
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Routines
  Routine feedback
    TextComponent text_2
      font = Calibri
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!


        Para salir, pulsa "space"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine trial_2
    PolygonComponent pos0
      fillColor [set every repeat] = $Color0
      lineColor [set every repeat] = $Color0
      lineWidth = 0.005
      nVertices = 100
      ori = 90
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos45
      fillColor [set every repeat] = $Color45
      lineColor [set every repeat] = $Color45
      nVertices = 100
      pos = (0.25, 0.25)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos90
      fillColor [set every repeat] = $Color90
      lineColor [set every repeat] = $Color90
      lineWidth = 0.005
      nVertices = 100
      pos = (0, 0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos135
      fillColor [set every repeat] = $Color135
      lineColor [set every repeat] = $Color135
      nVertices = 100
      pos = (-0.25, 0.25)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos180
      fillColor [set every repeat] = $Color180
      lineColor [set every repeat] = $Color180
      nVertices = 100
      pos = (-0.50, 0)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos225
      fillColor [set every repeat] = $Color225
      lineColor [set every repeat] = $Color225
      nVertices = 100
      shape = regular polygon...
      size = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos270
      fillColor [set every repeat] = $Color270
      lineColor [set every repeat] = $Color270
      nVertices = 100
      pos = (0, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent pos315
      fillColor [set every repeat] = $Color315
      lineColor [set every repeat] = $Color315
      nVertices = 100
      pos = (0.25, -0.25)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 1.5
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  Routine Instructions_2
    TextComponent text_3
      durationEstim = 10
      font = Calibri
      letterHeight = 0.025
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        En este test de working memory tendrás que
        memorizar la posición de los diferentes colores.


        El número de itema a recordar irá variando!


        Pulsa "space"para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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Flow
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trials_.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Color0', [1, 1, 0]), ('Color45', [1, 1, 1]), ('Color90', [0, 0, 1]), ('Color135', [0, 0, 0]), ('Color180', [1, 1, 0]), ('Color225', [1, 1, 0]), ('Color270', [1, 1, 0]), ('Color315', [0, 0, 0])]),
      OrderedDict([('Color0', [1, 1, 1]), ('Color45', [1, 0.5, 1]), ('Color90', [1, 0.5, 1]), ('Color135', [1, 1, 0]), ('Color180', [1, 1, 0]), ('Color225', [0, 0, 0]), ('Color270', [1, 0.5, 1]), ('Color315', [1, 1, 0])]),
      OrderedDict([('Color0', [0, 0, 0]), ('Color45', [1, 1, 1]), ('Color90', [1, 1, 1]), ('Color135', [1, 1, 0]), ('Color180', [0, 0, 0]), ('Color225', [0, 0, 0]), ('Color270', [1, 1, 1]), ('Color315', [1, 1, 0])])]
    Routine trial_2
  LoopTerminator trials
  Routine feedback
